CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|D:\2026-02-13_U2OS-Hoechst-H2AX_STC-11A-11B-Dox-BLO
    Name of the file:nuclei_identification.csv
    Load images based on this data?:Yes
    Base image location:None|E:\CP_Pharmakon
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,125
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:700
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RescaleIntensity:[module_num:3|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
    Select the input image:H2AX
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:H2AX_fluor
    Typical diameter of objects, in pixel units (Min,Max):40,125
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:700
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:5|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
    Select the input objects:H2AX_fluor
    Name the objects to be identified:H2AX_unscaled_all
    Select the method to identify the secondary objects:Propagation
    Select the input image:H2AX
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:6|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
    Select objects to be masked:Nuclei
    Name the masked objects:MatchedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:H2AX_fluor
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.75
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:7|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
    Select objects to be masked:H2AX_fluor
    Name the masked objects:MatchedH2AX
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MatchedNuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:H2AX, Hoechst
    Select objects to measure:MatchedH2AX, MatchedNuclei

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:H2AX_fluor, MatchedH2AX, MatchedNuclei, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:10|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Hoechst
    Name the output image:Damaged_Nuclei
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:blue
    Select objects to display:MatchedNuclei
    Select outline color:green
    Select objects to display:MaskedH2AX

OverlayOutlines:[module_num:11|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:H2AX
    Name the output image:Damaged_H2AX
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:blue
    Select objects to display:MatchedNuclei
    Select outline color:green
    Select objects to display:MaskedH2AX

SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Damaged_Nuclei
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:DamagedNuclei
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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